//This macro is intended to create 5x5 montages from a 10x montage from the CellaVista
// microscope. The four corners are not imaged. If these are imaged, the image numbering 
//must be adjusted. 
//For a given channel, the number of files between adjacent images equals the total  
//number of channels acquired.The file numbering is every other number for a given channel; 
//e.g., every other image is Red channel if two channels are imaged.
//The image file numbering begins in the middle, and spirals out counterclockwise to 
//adjacent tiles, beginning with the tile immediately above the middle.
//Input the basefile directory and the saved locations of each day.  
//The output is the day0-day10 stack of 5x5 montages.

macro "CV_PC9 pre-post Make Montage [f11]" {
Dialog.create("Enter Row and Column");
        Dialog.addMessage("Match the formatting initially shown");
        Dialog.addString("Text:", "-R00-C00", 18);
        Dialog.show();
        WellNumber = Dialog.getString(); 
        print(WellNumber);

basefile = "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\";

dayN3   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-01 PC9 -3dayE\\1\\";
dayN2   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-02 PC9 -2dayE\\1\\";
dayN1   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-03 PC9 -1dayE\\1\\";
day0   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-04 PC9 0dayE\\1\\";
day1   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-05 PC9 1dayE\\1\\";
day2   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-06 PC9 2dayE\\1\\";
day3   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-07 PC9 3dayE\\1\\";
day4   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-08 PC9 4dayE\\1\\";
day5   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-09 PC9 5dayE\\1\\";
day6   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-10 PC9 6dayE\\1\\";
day7   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-11 PC9 7dayE\\1\\";
day8   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-12 PC9 8dayE\\1\\";
day9   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-13 PC9 9dayE\\1\\";
day10   =   "F:\\CellaVista\\2013-04-01 PC9 pre-post E DCGA\\2013-04-14 PC9 10dayE\\1\\";

day = newArray(dayN3, dayN2, dayN1, day0, day1, day2, day3, day4, day5, day6, day7, day8, day9, day10, basefile);
//for (i=0; i<day.length; i++) print(day[i]);

setBatchMode(true);
for (i=0; i<14; i++) {
	CurrentDay = day[i];
	print(CurrentDay);
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=13 increment=2 scale=100 file=&WellNumber or=[] sort");
		selectWindow(1);
		rename("start.tif");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=12 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=start.tif stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=11 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=10 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=25 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=14 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=3 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=2 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=9 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=24 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=15 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=4 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=1 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=8 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=23 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=16 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=5 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=6 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=7 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=22 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=17 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=18 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=19 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=20 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=21 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");	
	run("Make Montage...", "columns=5 rows=5 scale=1.0 first=1 last=25 increment=1 border=0 font=12");
	setMinAndMax(0, 4095);
	rename("Well" + WellNumber + "H2B_day" + i);
	//saveAs("Tiff", basefile + "Well" + WellNumber + "H2B_day" + i);
	selectWindow("Concatenated Stacks");
	close();
//	close();
}
run("Images to Stack", "name=Stack title=[] use");
saveAs("Tiff", basefile + "Well" + WellNumber + "H2Bstack");
wait(2000);
close();
waitForUser("Done") ;
}
