//This macro is intended to create 5x5 montages from a 10x montage from the CellaVista microscope. All frames are imaged daily. 
//For a given channel, the number of files between adjacent images equals the total  number of channels acquired.The file numbering is every other number for a given channel; 
//e.g., every other image is Red channel if two channels are imaged.
//The image file numbering begins in the middle, and spirals out counterclockwise to adjacent tiles, beginning with the tile immediately above the middle.
//Input the basefile directory and the saved locations of each day.  The output is the day0-day10 stack of 5x5 montages.

macro "CV_SingleCell [f11]" {
Dialog.create("Enter Row and Column");
        Dialog.addMessage("Match the formatting initially shown");
        Dialog.addString("Text:", "-R00-C00", 18);
        Dialog.show();
        WellNumber = Dialog.getString(); 
        print(WellNumber);

basefile = "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\";
day0 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-18 BR1 DCGA (Day0E)\\1\\";
day1 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-19 BR1 DCGA (Day1E)\\1\\";
day2 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-20 BR1 DCGA (Day2E)\\1\\";
day3 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-21 BR1 DCGA (Day3E)\\1\\";
day4 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-22 BR1 DCGA (Day4E)\\1\\";
day5 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-23 BR1 DCGA (Day5E)\\1\\";
day6 =      "F:\\CellaVista\\2013-01-18 PC9-BR1 DCGA\\2013-01-24 BR1 DCGA (Day6E)\\1\\";

day = newArray(day0, day1, day2, day3, day4, day5, day6, basefile);
for (i=0; i<day.length; i++) print(day[i]);
setBatchMode(true);
for (i=0; i<7; i++) {
	CurrentDay = day[i];                   
	print(CurrentDay);
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=13 increment=2 scale=100 file=&WellNumber or=[] sort");
		selectWindow(1);
		rename("start.tif");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=12 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=start.tif stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=11 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=10 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=25 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=14 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=3 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=2 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=9 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=24 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=15 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=4 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=1 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=8 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=23 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=16 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=5 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=6 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=7 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=22 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=17 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=18 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=19 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=20 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=21 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Make Montage...", "columns=5 rows=5 scale=1.0 first=1 last=25 increment=1 border=0 font=12");
	setMinAndMax(0, 4095);
	rename("Well" + WellNumber + "H2B_day" + i);
	//saveAs("Tiff", basefile + "Well" + WellNumber + "H2B_day" + i);
	selectWindow("Concatenated Stacks");
	close();
}
run("Images to Stack", "name=Stack title=[] use");
saveAs("Tiff", basefile + "Well" + WellNumber + "_H2Bstack");
}
