//This macro is intended to create 5x5 montages from a 10x montage from the CellaVista
// microscope. The four corners are not imaged. If these are imaged, the image numbering 
//must be adjusted. 
//For a given channel, the number of files between adjacent images equals the total  
//number of channels acquired.The file numbering is every other number for a given channel; 
//e.g., every other image is Red channel if two channels are imaged.
//The image file numbering begins in the middle, and spirals out counterclockwise to 
//adjacent tiles, beginning with the tile immediately above the middle.
//Input the basefile directory and the saved locations of each day.  
//The output is the day0-day10 stack of 5x5 montages.

macro "CV_Make Montage [f11]" {
Dialog.create("Enter Row and Column");
        Dialog.addMessage("Match the formatting initially shown");
        Dialog.addString("Text:", "-R00-C00", 18);
        Dialog.show();
        WellNumber = Dialog.getString(); 
        print(WellNumber);

basefile = "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\";
day0 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\1\\";
day1 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\2\\";
day2 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\3\\";
day3 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\4\\";
day4 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\5\\";
day5 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\6\\";
day6 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\7\\";
day7 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\8\\";
day8 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\9\\";
day9 =   "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\10\\";
//day10 =  "F:\\CellaVista\\2013-06-07 PC9 Erl + Meki\\11\\";



day = newArray(day0, day1, day2, day3, day4, day5, day6, day7, day8, day9, basefile);
for (i=0; i<day.length; i++) print(day[i]);

setBatchMode(true);
for (i=0; i<10; i++) {
	CurrentDay = day[i];
	print(CurrentDay);
	n=toString(i+1);
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=3 increment=2 scale=100 file=&WellNumber or=[] sort");
		selectWindow(n);
		rename("start.tif");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=2 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=start.tif stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=9 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=4 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=1 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=8 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=5 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=6 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=7 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=&n stack3=[-- None --]");
	run("Make Montage...", "columns=3 rows=3 scale=1.0 first=1 last=25 increment=1 border=0 font=12");
	setMinAndMax(0, 4095);
	rename("Well" + WellNumber + "H2B_day" + i);
	//saveAs("Tiff", basefile + "Well" + WellNumber + "H2B_day" + i);
	selectWindow("Concatenated Stacks");
	close();
}
run("Images to Stack", "name=Stack title=[] use");
saveAs("Tiff", basefile + "Well" + WellNumber + "H2Bstack");
wait(100);
close();
waitForUser("Done") ;
}
