//This macro is intended to create 5x5 montages from a 10x montage from the CellaVista microscope. The four corners are not imaged. If these are imaged, the image numbering must be adjusted. 
//For a given channel, the number of files between adjacent images equals the total  number of channels acquired.The file numbering is every other number for a given channel; 
//e.g., every other image is Red channel if two channels are imaged.
//The image file numbering begins in the middle, and spirals out counterclockwise to adjacent tiles, beginning with the tile immediately above the middle.
//Input the basefile directory and the saved locations of each day.  The output is the day0-day10 stack of 5x5 montages.

macro "CV_SingleCell [f11]" {
Dialog.create("Enter Row and Column");
        Dialog.addMessage("Match the formatting initially shown");
        Dialog.addString("Text:", "-R00-C00", 18);
        Dialog.show();
        WellNumber = Dialog.getString(); 
        print(WellNumber);

basefile = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\";
day0 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-08 PLF PC9 10-day colony (#3) - day0\\1\\";
day1 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-09 PLF PC9 10-day colony (#3) - day1\\1\\";
day2 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-10 PLF PC9 10-day colony (#3) - day2\\1\\";
day3 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-11 PLF PC9 10-day colony (#3) - day3\\1\\";
day4 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-12 PLF PC9 10-day colony (#3) - day4\\1\\";
day5 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-13 PLF PC9 10-day colony (#3) - day5\\1\\";
day6 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-14 PLF PC9 10-day colony (#3) - day6\\1\\";
day7 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-15 PLF PC9 10-day colony (#3) - day7\\1\\";
day8 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-16 PLF PC9 10-day colony (#3) - day8\\1\\";
day9 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-17 PLF PC9 10-day colony (#3) - day9\\1\\";
day10 = "D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\PC9 singlecell3\\2012-06-18 PLF PC9 10-day colony (#3) - day10\\1\\";

day = newArray(day0, day1, day2, day3, day4, day5, day6, day7, day8, day9, day10, basefile);
for (i=0; i<day.length; i++) print(day[i]);

//setBatchMode(true);
for (i=0; i<11; i++) {
	CurrentDay = day[i];
	print(CurrentDay);
	open("D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\blank.tif");
	selectWindow("blank.tif");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=23 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=blank.tif stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=21 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=19 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	open("D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\blank.tif");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=blank.tif stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=25 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=5 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=3 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=17 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=41 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=27 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=7 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=1 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=15 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=39 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=29 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=9 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=11 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=13 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=37 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	open("D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\blank.tif");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=blank.tif stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=31 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=33 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	run("Image Sequence...", "open=[CurrentDay] number=1 starting=35 increment=2 scale=100 file=&WellNumber or=[] sort");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=1 stack3=[-- None --]");
	open("D:\\CellaVista\\Cell-Nuclei imaging\\PC9 singlecell\\blank.tif");
		run("Concatenate...", "  title=[Concatenated Stacks] stack1=[Concatenated Stacks] stack2=blank.tif stack3=[-- None --]");
	run("Make Montage...", "columns=5 rows=5 scale=1.0 first=1 last=25 increment=1 border=0 font=12");
	setMinAndMax(0, 4095);
	rename("Well" + WellNumber + "H2B_day" + i);
	//saveAs("Tiff", basefile + "Well" + WellNumber + "H2B_day" + i);
	selectWindow("Concatenated Stacks");
	close();
}
run("Images to Stack", "name=Stack title=[] use");
saveAs("Tiff", basefile + "Well" + WellNumber + "H2Bstack");
}
